<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 6/10/2011 at 4:14:02 at PM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" name="fhn" cmeta:id="fhn" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>The FitzHugh-Nagumo Simplified Cardiac Myocyte Model</title>
			</articleinfo>
		</article>
	</documentation>   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <component name="Main">
      <variable name="time" units="millisecond" initial_value="0"/>
      <variable name="r" units="dimensionless" initial_value="0"/>
      <variable name="x" units="dimensionless" initial_value="0"/>
      <variable name="y" units="dimensionless" initial_value="0"/>
      <variable name="kx" units="dimensionless" initial_value="0"/>
      <variable name="ky" units="dimensionless" initial_value="0"/>
      <variable name="zz" units="dimensionless" initial_value="0"/>
      <variable name="beta" units="dimensionless" initial_value="1.2"/>
      <variable name="gamma" units="dimensionless" initial_value="0.3"/>
      <variable name="epsilon" units="dimensionless" initial_value="0.03"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>r</ci>
            <apply>
               <times/>
               <ci>x</ci>
               <ci>x</ci>
               <ci>x</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
           	<ci>kx</ci>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>x</ci>
                     <apply>
                        <divide/>
                        <ci>r</ci>
                        <cn cellml:units="dimensionless">3</cn>
                     </apply>
                  </apply>
                  <ci>y</ci>
               </apply>
               <ci>zz</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>ky</ci>
            <apply>
               <times/>
               <ci>epsilon</ci>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>x</ci>
                     <ci>beta</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>gamma</ci>
                     <ci>y</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
</model>
