<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 06/11/2007 at 17:08:44 using:

COR (0.9.31.807)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
-->
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" cmeta:id="luo_rudy_1991" name="luo_rudy_1991">

  <documentation xmlns="http://cellml.org/tmp-documentation">

  </documentation>
  <units name="millisecond">
    <unit units="second" prefix="milli"/>
  </units>
  <units name="per_millisecond">
    <unit units="second" prefix="milli" exponent="-1"/>
  </units>
  <units name="millivolt">
    <unit units="volt" prefix="milli"/>
  </units>
  <units name="per_millivolt">
    <unit units="volt" prefix="milli" exponent="-1"/>
  </units>
  <units name="per_millivolt_millisecond">
    <unit units="millivolt" exponent="-1"/>
    <unit units="millisecond" exponent="-1"/>
  </units>
  <units name="per_1000_centimetre">
    <unit units="metre" prefix="-2" exponent="-1" multiplier="1000"/>
  </units>
  <units name="milliS_per_cm2">
    <unit units="siemens" prefix="milli"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  <units name="microF_per_cm2">
    <unit units="farad" prefix="micro"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  <units name="microA_per_cm2">
    <unit units="ampere" prefix="micro"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  <units name="millimolar">
    <unit units="mole" prefix="milli"/>
    <unit units="litre" exponent="-1"/>
  </units>
  <units name="joule_per_kilomole_kelvin">
    <unit units="joule"/>
    <unit units="mole" prefix="kilo" exponent="-1"/>
    <unit units="kelvin" exponent="-1"/>
  </units>
  <units name="coulomb_per_mole">
    <unit units="coulomb"/>
    <unit units="mole" exponent="-1"/>
  </units>
  <component name="membrane">  
      <variable units="millivolt" public_interface="out" cmeta:id="membrane_V" name="V" initial_value="-83.853"/>
      <variable units="joule_per_kilomole_kelvin" public_interface="out" name="R" initial_value="8314"/>
      <variable units="kelvin" public_interface="out" name="T" initial_value="310"/>
      <variable units="coulomb_per_mole" public_interface="out" name="F" initial_value="96484.6"/>
      <variable units="microF_per_cm2" name="C" initial_value="1"/>
      <variable units="microA_per_cm2" name="I_stim"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Na"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_si"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_K"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_K1"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Kp"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_b"/>
      <variable units="millisecond" name="stim_start" initial_value="100"/>
      <variable units="microA_per_cm2" name="stim_amplitude" initial_value="-25.5"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_stim</ci>
            <piecewise>
               <piece>
                  <ci>stim_amplitude</ci>
                  <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>stim_start</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="microA_per_cm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
                  <ci>C</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>I_stim</ci>
                  <ci>i_Na</ci>
                  <ci>i_si</ci>
                  <ci>i_K</ci>
                  <ci>i_K1</ci>
                  <ci>i_Kp</ci>
                  <ci>i_b</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
</model>
